<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM12</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Q - Start</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Q</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>W - Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>W</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EventAnalogInputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>33</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>